PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine load_screen
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    TextboxComponent loading
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Loading...
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  Routine trial
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    PolygonComponent cross1
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    SoundComponent song
      forceEndRoutine = False
      sound [set every repeat] = $song_file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      volume = 0.4
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='PsychoPy_Markers', type='Markers', channel_count=1, nominal_srate=0, channel_format='int32', source_id='music_eeg')
        outlet = StreamOutlet(info)
      Begin Routine:
        outlet.push_sample([int(trigger_value)])
  Routine control
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    PolygonComponent cross2
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    SoundComponent white_noise
      forceEndRoutine = False
      sound [set every repeat] = audio/whitenoise.mp3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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Flow
  Routine load_screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = COGS 189 song list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'song_file': 'audio/bbno1.mp3', 'trigger_value': 1.0},
      {'song_file': 'audio/bbno2.mp3', 'trigger_value': 1.0},
      {'song_file': 'audio/bbno3.mp3', 'trigger_value': 1.0},
      {'song_file': 'audio/bbno4.mp3', 'trigger_value': 1.0},
      {'song_file': 'audio/bbno5.mp3', 'trigger_value': 1.0},
      {'song_file': 'audio/meme1.mp3', 'trigger_value': 2.0},
      {'song_file': 'audio/meme2.mp3', 'trigger_value': 2.0},
      {'song_file': 'audio/meme3.mp3', 'trigger_value': 2.0},
      {'song_file': 'audio/meme4.mp3', 'trigger_value': 2.0},
      {'song_file': 'audio/meme5.mp3', 'trigger_value': 2.0}]
    Routine control
    Routine trial
  LoopTerminator trials
